//==============================================================================
//
//      Global variables for MVN simulations
//
//==============================================================================

//------------------------------------------------------------------------------
//  general simulation parameter
//------------------------------------------------------------------------------
DT = 0.1                        // (ms)
TSTART = 0                      // (ms)
TSTOP = 1000                   // (ms)
//TEMPERATURE = 36                // (degC)
TEMPERATURE = 25                // (degC) (for NMDA LTD simulations)
V_INIT = -65                    // (mV)

//------------------------------------------------------------------------------
//  synaptic background activity (ggSBA point process)
//------------------------------------------------------------------------------
GGSBA_SEED = -122134

GGSBA_EE = 0           // (mV)
GGSBA_EI = -75         // (mV)

GGSBA_GE0 = 0.0121     // (uS)
GGSBA_GI0 = 0.0573     // (uS)

GGSBA_STDE = 1*0.012     // (uS)
GGSBA_STDI = 1*0.0264    // (uS)

GGSBA_TAUE = 2.728     // (ms)
GGSBA_TAUI = 10.49     // (ms)

//------------------------------------------------------------------------------
//  recording
//------------------------------------------------------------------------------
strdef REC_VM_FILENAME
REC_VM_FILENAME = "Vm.rec"

strdef REC_SPIKES_FILENAME
REC_SPIKES_FILENAME = "spikes.rec"

//------------------------------------------------------------------------------
